// Extra fields to Pre mix, and start at specific columns or rows. The lowest level example protocol showing The MixTo command being used to specify the specific wells to be aliquoted to; 
// By doing this we are able to specify whether the aliqouts are pipetted by row or by column.
// In this case the user is still not specifying the well location (i.e. A1) in the parameters, although that would be possible to specify.
// We don't generally encourage this since Antha is designed to be prodiminantly a high level language which avoids the user specifying well locations but this possibility is there if necessary.
protocol AliquotStartatRowColumn

import (
	"fmt"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/wutil"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"strconv"
)


// Input parameters for this protocol (data)
Parameters (
	SolutionVolume Volume
	VolumePerAliquot  Volume
	NumberofAliquots int
	StartRow int // Optional parameter to specify Row start position; if not set or set to zero the first row will be selected
	StartColumn int // starts at 0
	ByRow bool
	PreMix bool
)

// Data which is returned from this protocol, and data types
Data (
	WellPositions []string // plate name as key to return []wells used
)


// Physical Inputs to this protocol with types
Inputs (
	Solutions []*wtype.LHComponent // we're now going to aliquot multiple solutions at the same time (but not mixing them)
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Aliquots []*wtype.LHComponent
)

Requirements {
	
}

// Conditions to run on startup
Setup {
	
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	number := SolutionVolume.SIValue()/VolumePerAliquot.SIValue()
	possiblenumberofAliquots, _ := wutil.RoundDown(number)
	if possiblenumberofAliquots < NumberofAliquots {
		Errorf("Not enough solution for this many aliquots")
	}
	
	
	aliquots := make([]*wtype.LHComponent,0)
	
	
	// work out well coordinates for any plate
	wellpositionarray := make([]string, 0)
	


	alphabet := []string{"A", "B", "C", "D", "E", "F", "G", "H", "I", "J",
		"K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X",
		"Y", "Z", "AA", "AB", "AC", "AD", "AE", "AF"}
	
	
	if ByRow {
		// add well positions to the array based upon the number of wells per column (OutPlate.WlsX) and row (OutPlate.WlsY) of the plate type in question
	for j := StartRow; j < OutPlate.WlsY; j++ {
		for i := StartColumn; i < OutPlate.WlsX; i++ { 
			
			// antha, like golang upon which it is built, is a strongly type language so an int must be converted to a string using the strconv package
			// as shown here, strings can be concatenated using + 
			// other types can sometimes be converted more directly. 
			// In particular an int can be converted to a float64 like this: 
			// var myInt int = 1
			// var myFloat float64
			// myFloat = float64(myInt)
			wellposition := alphabet[j] + strconv.Itoa(i+1)
			
			wellpositionarray = append(wellpositionarray, wellposition)
		}

	}
	}else {
		for j := StartColumn; j < OutPlate.WlsX; j++ {
			for i := StartRow; i < OutPlate.WlsY; i++ { 
			
				wellposition := alphabet[i] + strconv.Itoa(j+1)
			
				wellpositionarray = append(wellpositionarray, wellposition)
			}

		}
	}
	
	
	
	
	// initialise a counter 
	var counter int // an int is initialised as zero therefore this is the same as counter := 0 or var counter = 0
	// initialise a platenumber
	var platenumber int = 1
	
	for _, Solution := range Solutions {
		
		if PreMix {
		Solution.Type = wtype.LTPreMix
	}
		
	for k := 0; k < NumberofAliquots; k++ {
		
		if Solution.TypeName() == "dna"{
		Solution.Type = wtype.LTDoNotMix
		}
		aliquotSample := mixer.Sample(Solution, VolumePerAliquot)
		
		// this time we're using counter as an index to go through the wellpositionarray one position at a time and ensuring the next free position is chosen
		// the platenumber is hardcoded to 1 here so if we tried to specify too many aliquots in the parameters the protocol would fail
		// it would be better to create a platenumber variable of type int and use an if statement to increase platenumber by 1 if all well positions are filled up i.e.
		// if counter == len(wellpositionarray) {
		// 		platenumber++
		//}	
		aliquot := MixTo(OutPlate.Type,wellpositionarray[counter], platenumber, aliquotSample)
		aliquots = append(aliquots,aliquot)
		
		var platepluswell string = fmt.Sprint(platenumber,wellpositionarray[counter])
		WellPositions = append(WellPositions,platepluswell)
		
		
		if counter +1 == len(wellpositionarray){
			platenumber++
			counter = 0
		}else{
		counter = counter +1 // this is the same as using the more concise counter++
		}
	}
	Aliquots = aliquots
	
	
	// Exercise: refactor to use wtype.WellCoords instead of creating the well ids manually using alphabet and strconv
}

}
// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
	
}

