// demo protocol of how to create a dna type from user inputs
protocol NewDNASequence

import (
	"fmt"
	//"math"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/text"
)
// Input parameters for this protocol
Parameters (
	DNA_seq string
	Gene_name string
	Plasmid bool
	Linear bool
	SingleStranded bool
	
)

// Data which is returned from this protocol
Data (
	DNA DNASequence
	DNAwithORFs DNASequence
	Status string
)

// Physical inputs to this protocol
Inputs (

)

// Physical outputs from this protocol
Outputs (
)

Requirements {

}

// Actions to perform before protocol itself
Setup {

}

// Core process of the protocol: steps to be performed for each input
Steps {
	
	// != is go syntax for not equal to
	if Plasmid != Linear {
		
		// equivalent to if Plasmid == true
		if Plasmid  {
			// different functions exist for making an antha DNA sequence based on the properties
			DNA = wtype.MakePlasmidDNASequence(Gene_name,DNA_seq)
					
			}else if Linear {
					
				DNA = wtype.MakeLinearDNASequence(Gene_name,DNA_seq)
					
			} else if SingleStranded {
					
				DNA = wtype.MakeSingleStrandedDNASequence(Gene_name,DNA_seq)	
					
			} 
		
	// use FindallORFs from sequences library							
	orfs := sequences.FindallORFs(DNA.Seq)
	
	// convert those orfs to features
	features := sequences.ORFs2Features(orfs)
	
	// add annotations to sequence from features
	DNAwithORFs = wtype.Annotate(DNA,features)
	
	Status = fmt.Sprintln(
		text.Print("DNA_Seq: ",DNA_seq),
		text.Print("ORFs: ", DNAwithORFs.Features),
	)
	
}else {Status = fmt.Sprintln("correct conditions not met")}

}
// Actions to perform after steps block to analyze data
Analysis {

}

Validation {

}
