protocol Assay_quench

import (
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
)

// Input parameters for this protocol (data)
Parameters (
	SubstrateVolume Volume
	EnzymeVolume Volume
	QuenchingagentVolume Volume
	ReactionTime Time
	ReactionTemp Temperature
	OutPlate string
	ShakerRate Rate
)

// Data which is returned from this protocol, and data types
Data ()

// Physical Inputs to this protocol with types
Inputs (
	Substrate *LHComponent
	Enzyme *LHComponent
	Quenchingagent *LHComponent
	//OutPlate *LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	QuenchedReaction *LHComponent
)

Requirements {

}

// Conditions to run on startup
Setup {

}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {

	substrate := mixer.Sample(Substrate, SubstrateVolume)
	enzyme := mixer.Sample(Enzyme, EnzymeVolume)

	reaction := MixTo(OutPlate, "", 1, substrate)

	reaction = Mix(reaction, enzyme)

	var finishedreaction *LHComponent

	if ShakerRate.SIValue() == 0 && ReactionTemp.LessThan(wunit.NewTemperature(27, "C")) {
		finishedreaction = reaction
	} else {
		finishedreaction = Incubate(reaction, IncubateOpt{
			Temp:      ReactionTemp,
			Time:      ReactionTime,
			ShakeRate: ShakerRate,
		})
	}

	quench := mixer.Sample(Quenchingagent, QuenchingagentVolume)

	QuenchedReaction = Mix(finishedreaction, quench)

}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {

}
