// This protocol is intended to design a combinatorial library of all combinations of a list of Vectors, Promoters,
// RBSs, CDSs and Terminators according to an assembly standard ensuring compatibility with level 1 design.
// Level 1 adaptor sites (containing the correct restriction site are expected to be included in the promoter and terminator parts.
// These level 1 sites can be designed such that a series of level 1 parts may be joined together in a second assembly reaction.
// A list of sequencing primers to order will also be returned.
protocol CombinatorialLibraryDesign_From_Assembly_Standard_5Part

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences/oligos"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/export"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/search"
	"path/filepath"
)

// Input parameters for this protocol (data)
Parameters (
	ProjectName			string
	Standard				string // Custom design, may support MoClo, EcoFlex and GoldenBraid.
	StandardLabels 		[4]string
	StandardLevel		string // default is "level0"
	Vectors				[]wtype.DNASequence
	Part1s				[]wtype.DNASequence
	Part2s				[]wtype.DNASequence
	Part3s				[]wtype.DNASequence
	Part4s				[]wtype.DNASequence
	SitesToRemove		[]string
	BlastSearchSeqs		bool
	FolderPerConstruct	bool
	EndsAlreadyAdded 	bool
	
	// Option to add Level 1 adaptor sites to the Promoters and terminators to support hierarchical assembly
	// If Custom design the valid options currently supported are: "Device1","Device2", "Device3". 
	// If left empty no adaptor sequence is added.
	MakeLevel1Device 		string
	ReverseLevel1Orientation bool 
)

// Physical Inputs to this protocol with types
Inputs (

)

// Physical outputs from this protocol with types
Outputs (
	
)

// Data which is returned from this protocol, and data types
Data (
	StatusMap map[string]string
	PartswithOverhangsMap map[string][]wtype.DNASequence // parts to order
	Assemblies map[string][]wtype.DNASequence  // parts + vector map ready for feeding into downstream AutoAssembly element
	Sequences[]wtype.DNASequence
	Parts[][]wtype.DNASequence
	SequencingPrimers [][]wtype.DNASequence
	PassMap map[string]bool
	SeqsMap map[string]wtype.DNASequence // desired sequence to end up with after assembly
	EndreportMap  map[string]string
	PositionReportMap  map[string][]string
	PrimerMap map[string]oligos.Primer
	AssembledSequences wtype.File
	PartsToOrder []wtype.File
	PrimersToOrder []wtype.File
)
// Input Requirement specification
Requirements {
	// e.g. are MoClo types valid?
}

// Conditions to run on startup
Setup {}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	StatusMap = make(map[string]string)
	PartswithOverhangsMap = make(map[string][]wtype.DNASequence) // parts to order
	Assemblies = make(map[string][]wtype.DNASequence)
	PassMap = make(map[string]bool)
	SeqsMap = make(map[string]wtype.DNASequence) // desired sequence to end up with after assembly
	EndreportMap  = make(map[string]string)
	PositionReportMap = make(map[string][]string)
	StatusMap = make(map[string]string)
	PrimerMap = make(map[string]oligos.Primer)
	
	Sequences = make([]wtype.DNASequence,0)
	Parts = make([][]wtype.DNASequence,0)
	SequencingPrimers = make([][]wtype.DNASequence,0)
	
	var standardLabels []string
	
	for _, level := range StandardLabels {
		standardLabels = append(standardLabels,level) 
	}

	var counter int = 1

	if StandardLevel == ""{
		StandardLevel = "Level0" 
	}	
	
	
	for j := range Vectors {
		for k := range Part1s {
			for l := range Part2s {
				for m := range Part3s {	
					for n := range Part4s {
						key := 	ProjectName	+Vectors[j].Nm+"_"+Part1s[k].Nm+"_"+Part2s[l].Nm+"_"+Part3s[m].Nm+Part4s[n].Nm
						assembly := RunSteps(AssemblyStandard_TypeIIsDesign,
		Parameters {
					Constructname: 				key,
					Seqsinorder:					[]wtype.DNASequence{Part1s[k],Part2s[l],Part3s[m],Part4s[n]},
					AssemblyStandard:			Standard,
					Level:						StandardLevel, // of assembly standard
					Vector:						Vectors[j],
					PartMoClotypesinorder:		standardLabels, 
					OtherEnzymeSitesToRemove:	SitesToRemove,
					ORFstoConfirm:				[]string{}, // enter each as amino acid sequence
					RemoveproblemRestrictionSites: true,
					OnlyRemovesitesinORFs: 		false,
					EndsAlreadyadded:			EndsAlreadyAdded,
					ExporttoFastaFile: 			FolderPerConstruct,
					BlastSeqswithNoName:		BlastSearchSeqs,
					MakeLevel1Device: 			MakeLevel1Device,
					ReverseLevel1Orientation: 	ReverseLevel1Orientation,
		}, Inputs{
                    
                })
					key = key  //+ Vectors[j]
					PartswithOverhangsMap[key] = assembly.Data.PartswithOverhangs // parts to order
					Assemblies[key] = assembly.Data.PartsAndVector // parts + vector to be fed into assembly element
					Parts = append(Parts,assembly.Data.PartswithOverhangs)
					PassMap[key] = assembly.Data.Simulationpass
					EndreportMap[key]  = assembly.Data.Endreport
					PositionReportMap[key] = assembly.Data.PositionReport
					SeqsMap[key] = assembly.Data.NewDNASequence
					Sequences = append(Sequences,assembly.Data.NewDNASequence)
					StatusMap[key] = assembly.Data.Status
				
	// for each vector we'll also design sequencing primers
	
		primer := RunSteps(PrimerDesign_ColonyPCR_wtype,
		Parameters {
					FullDNASeq:assembly.Data.NewDNASequence,
					Maxtemp:    wunit.NewTemperature(72,"C"),
					Mintemp:    wunit.NewTemperature(50,"C"),
					Maxgc:    0.7,
					Minlength:   12, 
					Maxlength:  30, 
					Seqstoavoid: []string{},
					PermittednucleotideOverlapBetweenPrimers: 10, // number of nucleotides which primers can overlap by
					RegionSequence: assembly.Data.Insert, // first part
					FlankTargetSequence:true,
		}, Inputs{
	                    
	                })
					
					// rename primers
					primer.Data.FWDPrimer.Nm = primer.Data.FWDPrimer.Nm+ProjectName+Vectors[j].Nm+"_FWD"
					primer.Data.REVPrimer.Nm = primer.Data.REVPrimer.Nm+ProjectName+Vectors[j].Nm+"_REV"
					
					PrimerMap[key+"_FWD"]=primer.Data.FWDPrimer
					PrimerMap[key+"_REV"]=primer.Data.REVPrimer
					SequencingPrimers = append(SequencingPrimers,[]wtype.DNASequence{primer.Data.FWDPrimer.DNASequence,primer.Data.REVPrimer.DNASequence})
					counter++		
					}
				}
			}
		}
	}
	
	
	// export sequence to fasta
		
	var err error
	// export simulated sequences to file
	AssembledSequences, _,err = export.FastaSerial(export.LOCAL,filepath.Join(ProjectName,"AssembledSequences"), Sequences)
	
	if err != nil {
		Errorf("Error exporting sequence file for %s: %s",ProjectName,err.Error())
	}
	// add fasta file for each set of parts with overhangs
	
	labels := standardLabels
	
	refactoredparts:= make(map[string][]wtype.DNASequence)
	
	newparts := make([]wtype.DNASequence,0)
	
	for _, parts := range Parts{
	
	for j := range parts{
		newparts = refactoredparts[labels[j]]
		newparts = append(newparts,parts[j])
		refactoredparts[labels[j]]=newparts
	}
	}
	
	for key,value := range refactoredparts{
			
		duplicateremoved := search.RemoveDuplicateSequences(value)
		
		file, _, err := export.FastaSerial(export.LOCAL,filepath.Join(ProjectName,key), duplicateremoved)
		
		if err != nil {
			Errorf("Error exporting parts to order file for %s %s: %s",ProjectName,key,err.Error())
		}
		
		PartsToOrder = append(PartsToOrder,file)
	}
	
	// add fasta file for each set of primers
	labels= []string{"FWDPrimers","REVPrimers"}
	
	refactoredparts = make(map[string][]wtype.DNASequence)
	
	newparts = make([]wtype.DNASequence,0)
	
	for _, parts := range SequencingPrimers{
	
		for j := range parts{
			newparts = refactoredparts[labels[j]]
			newparts = append(newparts,parts[j])
			refactoredparts[labels[j]]=newparts
		}
	}
	
	for key,value := range refactoredparts{
		
		duplicateremoved := search.RemoveDuplicateSequences(value)
		
		primerFile, _, err :=  export.FastaSerial(export.LOCAL,filepath.Join(ProjectName,key), duplicateremoved)
		
		if err != nil {
			Errorf("Error exporting primers to order file for %s %s: %s",ProjectName,key,err.Error())
		}
		
		PrimersToOrder = append(PrimersToOrder, primerFile)
	}
	
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
