// This protocol is intended to design assembly parts using a specified enzyme. 
// overhangs are added to complement the adjacent parts and leave no scar. 
// parts can be entered as genbank (.gb) files, sequences or biobrick IDs
// If assembly simulation fails after overhangs are added. In order to help the user
// diagnose the reason, a report of the part overhangs 
// is returned to the user along with a list of cut sites in each part.
protocol Scarfree_siteremove_orfcheck

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"fmt"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/export"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/Parser"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes/lookup"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/igem"
	inventory "github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/Inventory"
	"strconv"
	"strings"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/text"
	features "github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences/features"
)

// Input parameters for this protocol (data)
Parameters (
	Constructname 				string
	Seqsinorder					[]string
	OtherEnzymeSitesToRemove	[]string
	Vector						string
	Enzymename					string
	ORFstoConfirm				[]string // enter each as amino acid sequence
	RemoveproblemRestrictionSites bool
	EndsAlreadyadded 			bool
	ExporttoFastaFile 			bool
	BlastSeqswithNoName 			bool
)

// Physical Inputs to this protocol with types
Inputs (

)

// Physical outputs from this protocol with types
Outputs (
	
)

// Data which is returned from this protocol, and data types
Data (
	Warnings error
	Status string
	Simulationpass bool
	PartswithOverhangs []wtype.DNASequence // parts to order
	PartsWithSitesRemoved []wtype.DNASequence
	OriginalParts []wtype.DNASequence 
	NewDNASequence wtype.DNASequence // desired sequence to end up with after assembly
	Insert wtype.DNASequence
	ORFmissing bool
	Endreport string
	PositionReport []string
	Plasmid bool
	ORIpresent bool
	SelectionMarkerPresent bool
	AssembledSequenceFile File
	PartsToOrder File
)
// Input Requirement specification
Requirements {
	// e.g. are MoClo types valid?
}

// Conditions to run on startup
Setup {}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	// set warnings reported back to user to none initially
	warnings := make([]string, 0)

	// declare some temporary variables to be used later
	var warning string
	var err error
	
	// make an empty array of DNA Sequences ready to fill
	partsinorder := make([]wtype.DNASequence, 0)

	var partDNA wtype.DNASequence
	var vectordata wtype.DNASequence

	Status = "all parts available"
	for i, part := range Seqsinorder {
		// check if genbank feature
		if strings.Contains(part, ".gb") && strings.Contains(part, "Feature:") {

			split := strings.SplitAfter(part, ".gb")
			file := split[0]

			split2 := strings.Split(split[1], ":")
			feature := split2[1]

			partDNA, _ = parser.GenbankFeaturetoDNASequence(file, feature)
			
			// check if genbank file
		} else if strings.Contains(part, ".gb") {

			partDNA, _ = parser.GenbanktoAnnotatedSeq(part)
			//check if biobrick
		} else if strings.Contains(part, "BBa_") {
				nm := "Part "+strconv.Itoa(i)+"_"+part
				part = igem.GetSequence(part)
			
			partDNA = wtype.MakeLinearDNASequence(nm, part)
			
			// check if in inventory
		} else if inventoryDNA, found := inventory.Partslist()[part]; found {
			partDNA = inventoryDNA
			
			// else treat as DNA sequence and check
			}else {
				partDNA = wtype.MakeLinearDNASequence("Part "+strconv.Itoa(i) , part)
			
		// test for illegal nucleotides
		pass,illegals,_ := sequences.Illegalnucleotides(partDNA)
		
		if !pass {
			var newstatus = make([]string,0)
			for _,illegal := range illegals {
				
				newstatus =append(newstatus, "part: " + partDNA.Nm+" "+ partDNA.Seq + ": contains illegalnucleotides:"+ illegal.ToString())
			}
			warnings = append(warnings,strings.Join(newstatus,""))
			Errorf(strings.Join(newstatus,""))
		}
		if pass && BlastSeqswithNoName{
			// run a blast search on the sequence to get the name
			blastsearch := RunSteps(BlastSearch_wtype, 
                Parameters{
                	DNA: partDNA, 
                }, Inputs{
                      
                })
		partDNA.Nm = blastsearch.Data.AnthaSeq.Nm
		}
		
		}
		partsinorder = append(partsinorder,partDNA)
	}
	
	// export original parts list
	
	OriginalParts = partsinorder
	
	warnings = append(warnings,fmt.Sprintln(partsinorder))
			
	
	// check parts for restriction sites first and remove if the user has chosen to
	enz, err := lookup.EnzymeLookup(Enzymename)

	if err !=nil {
		Errorf(err.Error())
	}

	// get properties of other enzyme sites to remove
	removetheseenzymes := make([]wtype.RestrictionEnzyme,0)
	removetheseenzymes = append(removetheseenzymes,enz)
	
	for _,enzyme := range OtherEnzymeSitesToRemove {
		enzyTypeII, err := lookup.EnzymeLookup(enzyme)
		if err!=nil {
			Errorf(err.Error())
		}
		removetheseenzymes = append(removetheseenzymes,enzyTypeII)
	}

	warning = text.Print("RemoveproblemRestrictionSites =", RemoveproblemRestrictionSites)
	warnings = append(warnings, warning)
	if RemoveproblemRestrictionSites {
		newparts := make([]wtype.DNASequence, 0)
		warning = "Starting process or removing restrictionsite"
		warnings = append(warnings, warning)

		for _, part := range partsinorder {
		
			info := enzymes.Restrictionsitefinder(part, removetheseenzymes)

			for _, anysites := range info {
				if anysites.Sitefound {
					warning = "problem " + anysites.Enzyme.Name+" site found in " + part.Nm
					warnings = append(warnings, warning)
					orf, orftrue := sequences.FindBiggestORF(part.Seq)
					warning = fmt.Sprintln(anysites.Enzyme.Name+" site found in orf ", part.Nm, " ", orftrue, " site positions ", anysites.Positions("ALL"), "orf between", orf.StartPosition, " and ", orf.EndPosition, /*orf.DNASeq[orf.StartPosition:orf.EndPosition]*/)
					warnings = append(warnings, warning)
					if orftrue /* && len(orf.ProtSeq) > 20 */ {
						allsitestoavoid := make([]string, 0)
						allsitestoavoid = append(allsitestoavoid, anysites.Recognitionsequence, sequences.RevComp(anysites.Recognitionsequence))
						orfcoordinates := sequences.MakeStartendPair(orf.StartPosition, orf.EndPosition)
						for _, position := range anysites.Positions("ALL") {
							if orf.StartPosition < position && position < orf.EndPosition {
								originalcodon := ""
								codonoption := ""
								part, originalcodon, codonoption, err = sequences.ReplaceCodoninORF(part, orfcoordinates, position, allsitestoavoid)
								warning = fmt.Sprintln("sites to avoid: ", allsitestoavoid[0], allsitestoavoid[1])
								warnings = append(warnings, warning)
								warnings = append(warnings, "Paaaaerrttseq: "+part.Seq+"position: "+strconv.Itoa(position)+" original: "+originalcodon+" replacementcodon: "+codonoption)
								if err != nil {
									warning := text.Print("removal of "+anysites.Enzyme.Name+" site from orf "+orf.DNASeq, " failed! improve your algorithm! "+err.Error())
									warnings = append(warnings, warning)
								}
							} else {
								allsitestoavoid := make([]string, 0)
								part, err = sequences.RemoveSite(part, anysites.Enzyme, allsitestoavoid)
								if err != nil {

									warning = text.Print(anysites.Enzyme.Name+" position found to be outside of orf: "+orf.DNASeq, " failed! improve your algorithm! "+err.Error())
									warnings = append(warnings, warning)
								}
							}
						}
					} else {
						allsitestoavoid := make([]string, 0)
						temppart, err := sequences.RemoveSite(part, anysites.Enzyme, allsitestoavoid)
				//		fmt.Println("part= ", part)
				//		fmt.Println("temppart= ", temppart)
						if err != nil {
							warning := text.Print("removal of site failed! improve your algorithm!", err.Error())
							warnings = append(warnings, warning)

						}
						warning = fmt.Sprintln("modified "+temppart.Nm+"new seq: ", temppart.Seq, "original seq: ",part.Seq)
						warnings = append(warnings, warning)
						part = temppart

						//	}
					}
				}
				
				
			}
			newparts = append(newparts, part)

				partsinorder = newparts
		}
	}
	
	
	// export the parts list with sites removed
	PartsWithSitesRemoved = partsinorder
	
	// make vector into an antha type DNASequence
	if inventorydata, found := inventory.Partslist()[Vector]; found{
		vectordata = inventorydata
		}else if strings.Contains(Vector, ".gb") {
	
			vectordata, _ = parser.GenbanktoAnnotatedSeq(Vector)
			vectordata.Plasmid = true
		}else {
		vectornm := "Vector"
		if strings.Contains(Vector, "BBa_")||strings.Contains(Vector, "pSB") {
			vectornm = Vector
			Vector = igem.GetSequence(Vector)
			
		}
		vectordata = wtype.MakePlasmidDNASequence(vectornm,Vector)
		}

	//lookup restriction enzyme
	restrictionenzyme, err := lookup.TypeIIsLookup(Enzymename)
	if err != nil {
		warnings = append(warnings, text.Print("Error", err.Error()))
	}

	//  Add overhangs for scarfree assembly based on part seqeunces only, i.e. no Assembly standard
	fmt.Println("warnings:", warnings)
	
	if EndsAlreadyadded {
		PartswithOverhangs = partsinorder
	} else {PartswithOverhangs = enzymes.MakeScarfreeCustomTypeIIsassemblyParts(partsinorder, vectordata, restrictionenzyme)
	}
	
	// Check that assembly is feasible with designed parts by simulating assembly of the sequences with the chosen enzyme
	assembly := enzymes.Assemblyparameters{Constructname, restrictionenzyme.Name, vectordata, PartswithOverhangs}
	status, numberofassemblies, _, newDNASequence, simerr := enzymes.Assemblysimulator(assembly)
	
	if simerr != nil {
		warnings = append(warnings, text.Print("Error", simerr.Error()))
	}
	
	Insert, err = assembly.Insert()
	
	if err != nil {
		
		Errorf("Error calculating insert: %s ",err.Error())
	}

	Plasmid, ORIpresent, SelectionMarkerPresent, err = features.ValidPlasmid(newDNASequence)
	
	if err != nil {
		warnings = append(warnings, text.Print("Error", err.Error()))
	}

	endreport := "Endreport only run in the event of assembly simulation failure"
	//sites := "Restriction mapper only run in the event of assembly simulation failure"
	newDNASequence.Nm = Constructname
	NewDNASequence = newDNASequence
	if simerr == nil && numberofassemblies == 1 {

		Simulationpass = true
	}// else {

		warnings = append(warnings, status)
		// perform mock digest to test fragement overhangs (fragments are hidden by using _, )
		_, stickyends5, stickyends3 := enzymes.TypeIIsdigest(vectordata, restrictionenzyme)

		allends := make([]string, 0)
		ends := ""

		ends = text.Print(vectordata.Nm+" 5 Prime end: ", stickyends5)
		allends = append(allends, ends)
		ends = text.Print(vectordata.Nm+" 3 Prime end: ", stickyends3)
		allends = append(allends, ends)

		for _, part := range PartswithOverhangs {
			_, stickyends5, stickyends3 := enzymes.TypeIIsdigest(part, restrictionenzyme)
			ends = text.Print(part.Nm+" 5 Prime end: ", stickyends5)
			allends = append(allends, ends)
			ends = text.Print(part.Nm+" 3 Prime end: ", stickyends3)
			allends = append(allends, ends)
		}
		endreport = strings.Join(allends, " ")
		if !Simulationpass{
		warnings = append(warnings, endreport)
		}
//	}

	// check number of sites per part !

	sites := make([]int, 0)
	multiple := make([]string, 0)
	for _, part := range PartswithOverhangs {

		info := enzymes.Restrictionsitefinder(part, removetheseenzymes)

		for i := range info {
		sitepositions := enzymes.SitepositionString(info[i])

		sites = append(sites, info[i].Numberofsites)
		sitepositions = text.Print(part.Nm+" "+info[i].Enzyme.Name+" positions:", sitepositions)
		multiple = append(multiple, sitepositions)
		}
	}

	for _, orf := range ORFstoConfirm {
		if sequences.LookforSpecificORF(NewDNASequence.Seq, orf) == false {
			warning = text.Print("orf not present: ", orf)
			warnings = append(warnings, warning)
			ORFmissing = true
		}
	}

	if len(warnings) == 0 {
		warnings = append(warnings, "none")
	}
	Warnings = fmt.Errorf(strings.Join(warnings, ";"))
	Endreport = endreport
	PositionReport = multiple

	partsummary := make([]string, 0)
	for _, part := range PartswithOverhangs {
		partsummary = append(partsummary, text.Print(part.Nm, part.Seq))
	}
	partsummary = append(partsummary, text.Print("Vector:"+ vectordata.Nm, vectordata.Seq))
	partstoorder := text.Print("PartswithOverhangs: ", partsummary)
	

	// Print status
	if Status != "all parts available"{
		Status = fmt.Sprintln(Status)
	} else {Status = fmt.Sprintln(
		text.Print("simulator status: ", status),
		text.Print("Endreport after digestion: ",endreport),
		text.Print("Sites per part for " + Enzymename, sites),
		text.Print("Positions: ", multiple),
		text.Print("Warnings:", Warnings.Error()),
		text.Print("Simulationpass=", Simulationpass),
		text.Print("NewDNASequence: ",NewDNASequence),
		text.Print("Any Orfs to confirm missing from new DNA sequence:", ORFmissing),
		partstoorder,
		)

	}
	
	// export sequence to fasta
	if ExporttoFastaFile && Simulationpass{
		exportedsequences := make([]wtype.DNASequence,0)
		// add dna sequence produced
		exportedsequences = append(exportedsequences,NewDNASequence)
		
		// export to file
		AssembledSequenceFile, _, err = export.FastaSerial(export.LOCAL,Constructname+"_AssemblyProduct", exportedsequences)
		if err != nil {
			Errorf(err.Error())
		}
		// reset 
		exportedsequences = make([]wtype.DNASequence,0)
		// add all parts with overhangs 
		for _,part := range PartswithOverhangs{
		exportedsequences = append(exportedsequences,part)	
		}
		PartsToOrder, _, err = export.FastaSerial(export.LOCAL,Constructname+"_Parts", exportedsequences)
		if err != nil {
			Errorf(err.Error())
		}
	}
	
	
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
