protocol FluorescenceMeasurement

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
)

Parameters (
	ExcitationWavelength Length
	EmissionWavelength Length
	DilutionVolume Volume
)

Data (
	FluorescenceMeasurement float64
)

Inputs (
	SampleForReading *wtype.LHComponent
	Diluent *wtype.LHComponent
)

Outputs (
)

Requirements {
}

Setup {
}

Steps {
	dilutionSample:=mixer.Sample(Diluent, DilutionVolume)
	Mix(SampleForReading, dilutionSample)
	//dilutedSample:=Mix(SampleForReading, dilutionSample)
//	FluorescenceMeasurement = ReadEM(dilutedSample, ExcitationWavelength, EmissionWavelength)
	FluorescenceMeasurement = 0.5
}

Analysis {
}

Validation {
}
