//This element will work out and perform the dilutions necessary to make an antha palette.
protocol CreateAnthaPalette

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/image"
	"github.com/antha-lang/antha/antha/anthalib/wunit"
	"fmt"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/microArch/factory"
	"image/color"
)


// Input parameters for this protocol (data)
Parameters (
	AnthaPalette	*image.AnthaPalette	//AnthaPalette to be generated
	//ColorVolume		Volume				//Volume of each color on the palette you want to generate
	//PalettePlate	wtype.LHPlate		//Plate on which the palette will be generated
	LowerThreshold	int					//RGB value below which we do not create a color (we consider it nil). The number is between 0 and 65535.
)

// Data which is returned from this protocol, and data types
Data (
)


// Physical Inputs to this protocol with types
Inputs (

)

// Physical outputs from this protocol with types
Outputs (
	MixedAnthaPalette *image.AnthaPalette	//The palette with physical location information added to the LHComponents.
)

Requirements {
	
}

// Conditions to run on startup
Setup {
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	//----------------------------------------------------------------------------------
	//Globals
	//----------------------------------------------------------------------------------

	//This is the maximum reached by summing RGB values. We use this as a reference to get percentages values for each channels
	var maxCMYK uint8 = 255

	//This is the minimum volume below which the sample() functions would return nil.
	var minVolume = wunit.NewVolume(0.5,"ul")

	//Placeholder for the current number of colors added to a solution.
	colorsAdded := 1

	//TODO Those globals are set up for testing
	ColorVolume := wunit.NewVolume(10,"ul")
	PalettePlate := factory.GetPlateByType("pcrplate_skirted")


	//----------------------------------------------------------------------------------
	//Generating colors
	//----------------------------------------------------------------------------------

	//iterate over each colors in the palette
	for i , AnthaColor := range AnthaPalette.AnthaColors {

		//PlaceHolder for the LHComponent solution to be pipetted into the well
		var solution *LHComponent

		//TODO use this variable to fill the rest of the well?
		//PlaceHolder for the total well volume
		//var totalVolume []Volume
		//Boolean checking if the solution being made for the current color is initialized
		solutionInitialized := false

		//extract RGB values. We do not use the a (alpha) value
		r,g,b,_ := AnthaColor.Color.RGBA()

		fmt.Println(uint8(r),uint8(g),uint8(b))

		//convert to the CMYK model since that is what is used to generate colors from paint
		c,m,y,k := color.RGBToCMYK(uint8(r),uint8(g),uint8(b))

		//figure out the volumes needed for the color and adding them to a map for easier iteration
		volumes := map[string]wunit.Volume{
			"c": wunit.NewVolume((float64(c)/float64(maxCMYK)) * ColorVolume.RawValue(),ColorVolume.Unit().PrefixedSymbol()),
			"m": wunit.NewVolume((float64(m)/float64(maxCMYK)) * ColorVolume.RawValue(),ColorVolume.Unit().PrefixedSymbol()),
			"y": wunit.NewVolume((float64(y)/float64(maxCMYK)) * ColorVolume.RawValue(),ColorVolume.Unit().PrefixedSymbol()),
			"k": wunit.NewVolume((float64(k)/float64(maxCMYK)) * ColorVolume.RawValue(),ColorVolume.Unit().PrefixedSymbol()),
		}

		//Check if the values for each colors is lower than the lowerThreshold defined, if they are we do not produce this palette color
		if r <= uint32(LowerThreshold) && g <= uint32(LowerThreshold) && b <= uint32(LowerThreshold) {
			continue
		}else{

			//placeholders for the CMYK indidual color samples
			var sample *LHComponent

			//We range over the calculated RGB volumes and produce each of the desired colors.
			for _ , volume := range volumes{
				switch solutionInitialized {
					case false:
						//First mixing command
						fmt.Println("first component added")
						//Initiating the LHComponents to pipette with volume information

						//Initiating the LHComponents to pipette with volume information
						//we need to check if the volumes are lower than 0.05ul because otherwise the sample() function would return nil.
						if minVolume.GreaterThan(volume){
							sample = mixer.Sample(AnthaColor.Component, minVolume)
						}else{
							sample = mixer.Sample(AnthaColor.Component, volume)
						}

						//since this is the first color to be pipetted, we use MixNamed to instantiate the LHComponent
						solution = MixNamed(PalettePlate.Type, "","Palette", sample)

						//change to pipette above to signal LHComponents are still to be added
						sample.Type = wtype.LTDISPENSEABOVE
						//adding to the added color counter
						colorsAdded++

						//signalling that the solution is intitialized
						solutionInitialized = true

					default:
						//consecutive mixing commands
						fmt.Println("consecutive mixing commands")

						//Initiating the LHComponents to pipette with volume information
						//we need to check if the volumes are lower than 0.05ul because otherwise the sample() function would return nil.
						if minVolume.GreaterThan(volume){
							sample = mixer.Sample(AnthaColor.Component, minVolume)
						}else{
							sample = mixer.Sample(AnthaColor.Component, volume)
						}

						//adding the sample to the solution
						solution = Mix(solution, sample)

						//checking if no more colors need to be added, and changing the information appropriately. Since we use the CMYK model this is four.
						if colorsAdded != 4{
							//change to pipette above to signal LHComponents are still to be added
							sample.Type = wtype.LTDISPENSEABOVE
							//adding to the added color counter
							colorsAdded++
						}else{
							sample.Type = wtype.LTMegaMix

							//When all components are added
							fmt.Println("solution finalized")

							//adding the final created LHComponent to the AnthaColor (since it has the added mixing information)
							AnthaPalette.AnthaColors[i].Component = solution

							//resetting counters
							colorsAdded = 1
							solutionInitialized = false
						}
				}
			}
		}
	}

	//returning the AnthaPalette with updated LHComponents
	MixedAnthaPalette = AnthaPalette

}
// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
	
}

