// Download and open an image file given a URL
protocol DownloadImage

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/image"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/download"
	goimage "image"
)


// Input parameters for this protocol (data)
Parameters (
	URL	string //URL from which the image will be downloaded
)

// Data which is returned from this protocol, and data types
Data (
	Image *goimage.NRGBA		//Opened image
	Error	error				//error message
)


// Physical Inputs to this protocol with types
Inputs (
)

// Physical outputs from this protocol with types
Outputs (
)

Requirements {
}

// Conditions to run on startup
Setup {
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {

	//-------------------------------------------------------------------------------------
	//Globals
	//-------------------------------------------------------------------------------------

	var imgFile	File

	//-------------------------------------------------------------------------------------
	//Fetching image file
	//-------------------------------------------------------------------------------------

	imgFile , Error = download.File(URL, "Downloaded file")
	if Error != nil{
		Errorf(Error.Error())
	}


	//-------------------------------------------------------------------------------------
	//Opening image
	//-------------------------------------------------------------------------------------

	Image, Error = image.OpenFile(imgFile)
	if Error != nil{
		Errorf(Error.Error())
	}

}




// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {

}

