protocol MakePCRmmx

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/mixer"

)

/*type Polymerase struct {
	LHComponent
	Rate_BPpers float64
	Fidelity_errorrate float64 // could dictate how many colonies are checked in validation!
	Extensiontemp Temperature
	Hotstart bool
	StockConcentration Concentration // this is normally in U?
	TargetConcentration Concentration
	// this is also a glycerol solution rather than a watersolution!
}
*/


// Input parameters for this protocol (data)
Parameters (
	// PCRprep parameters:
	WaterVolume Volume
	ReactionVolume Volume
	BufferConcinX int

	AdditiveVols []Volume

	PolymeraseVolume Volume
	DNTPVol Volume
	FwdPrimerName string
	RevPrimerName string
	/*
	// let's be ambitious and try this as part of type polymerase Polymeraseconc Volume
	
	//Templatetype string  // e.g. colony, genomic, pure plasmid... will effect efficiency. We could get more sophisticated here later on... 
	//FullTemplatesequence string // better to use Sid's type system here after proof of concept
	//FullTemplatelength int	// clearly could be calculated from the sequence... Sid will have a method to do this already so check!
	//TargetTemplatesequence string // better to use Sid's type system here after proof of concept
	//TargetTemplatelengthinBP int
	*/
	// Reaction parameters: (could be a entered as thermocycle parameters type possibly?)
	Templatevolume Volume
	FwdPrimerVol Volume
	RevPrimerVol Volume
	Hotstart bool
	AddPrimerstoMasterMix bool
)

// Data which is returned from this protocol, and data types
Data (
)


// Physical Inputs to this protocol with types
Inputs (
	FwdPrimer *LHComponent
	RevPrimer *LHComponent
	DNTPS *LHComponent
	PCRPolymerase *LHComponent
	Buffer *LHComponent
	Water *LHComponent
	Additives []*LHComponent // e.g. DMSO
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Reaction *LHComponent
)

Requirements {
}

// Conditions to run on startup
Setup {
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	// rename components
	
	bufferVolume := (wunit.CopyVolume(ReactionVolume))
	bufferVolume.DivideBy(float64(BufferConcinX))
	
	// Make a mastermix
	samples := make([]*LHComponent, 0)
	waterSample := mixer.Sample(Water, WaterVolume)
	bufferSample := mixer.Sample(Buffer,bufferVolume)
	samples = append(samples, waterSample, bufferSample)

	dntpSample := mixer.Sample(DNTPS, DNTPVol)
	samples = append(samples, dntpSample)
	
	if len(Additives)!=len(AdditiveVols){
		Errorf("Bad things are going to happen if you have different numbers of additives and additivevolumes")
	}
	
	for i := range Additives {
		additiveSample := mixer.Sample(Additives[i], AdditiveVols[i])
		samples = append(samples, additiveSample)
	}

	if Hotstart == false {
	polySample := mixer.Sample(PCRPolymerase, PolymeraseVolume)
	samples = append(samples, polySample)
	}
	
	// if this is true do stuff inside {}
	if AddPrimerstoMasterMix {
	
	FwdPrimerSample := mixer.Sample(FwdPrimer, FwdPrimerVol)
	samples = append(samples, FwdPrimerSample)
	RevPrimerSample := mixer.Sample(RevPrimer, RevPrimerVol)
	samples = append(samples, RevPrimerSample)
	
	}
	
	// pipette out to make mastermix
	mastermix := MixInto(OutPlate, "", samples...)
	
	// rest samples to zero
	samples = make([]*LHComponent, 0)
	
	// if this is false do stuff inside {}
	if !AddPrimerstoMasterMix {
	
	FwdPrimerSample := mixer.Sample(FwdPrimer, FwdPrimerVol)
	samples = append(samples, FwdPrimerSample)
	RevPrimerSample := mixer.Sample(RevPrimer, RevPrimerVol)
	samples = append(samples, RevPrimerSample)
	
	}

	
	for j := range samples { 
	mastermix = Mix(mastermix, samples[j])
	}
	reaction := mastermix

	// this needs to go after an initial denaturation!
	if Hotstart {
	polySample := mixer.Sample(PCRPolymerase, PolymeraseVolume)
	
	reaction = Mix(reaction,polySample)
	}

	
	// all done
	Reaction = reaction

}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
