// Protocol Transfer_multi will transfer a series of components to a specified destination plate
// Liquid names may be specified which will override the component names
// if no liquid names are specified the Starting Solution names are preserved
// either all liquidnames must be specified or none
protocol Transfer_multi

import (
	"fmt"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
)

// Input parameters for this protocol (data)
Parameters (
	// Liquid names may be specified which will override the component names
	// if no liquid names are specified the Starting Solution names are preserved
	// either all liquidnames must be specified or none
	Liquidnames []string
	// One liquid volume is specified for all transfers
	LiquidVolume Volume
)

// Data which is returned from this protocol, and data types
Data (
	Status map[string]string
)

// Physical Inputs to this protocol with types
Inputs (
	// The solutions to be transferred
	Startingsolutions []*LHComponent
	// one outplate is specified for all transfers
	OutPlate *LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	FinalSolutions []*LHComponent
)

Requirements {

}

// Conditions to run on startup
Setup {

}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {

	Status = make(map[string]string)

	if len(Liquidnames) != len(Startingsolutions) && len(Liquidnames) > 0 {
		Errorf("Unequal length of liquid names specified compared to starting solutions, either make these the same length or keep Liquidnames empty")
	}

	var outPlateWells []string = OutPlate.AllWellPositions(wtype.BYCOLUMN)

	for i, liquid := range Startingsolutions {

		if len(Liquidnames) != 0 {
			liquid.CName = Liquidnames[i]
		}

		sample := mixer.Sample(liquid, LiquidVolume)

		FinalSolutions = append(FinalSolutions, MixInto(OutPlate, outPlateWells[i], sample))

		// if a liquid name has already been specified the name will be appended
		if _, found := Status[liquid.CName]; found {
			originalName := liquid.CName
			var number int = 2
			for {
				liquid.CName = originalName + fmt.Sprint(number)
				if _, found := Status[liquid.CName]; found {
					number++
					liquid.CName = originalName + fmt.Sprint(number)
				} else {
					break
				}
			}
		}
		Status[liquid.CName] = LiquidVolume.ToString() + " of " + liquid.CName + " was mixed into " + OutPlate.Type
	}
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {

}
