protocol TypeIISConstructAssembly

import (
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"fmt"
)

// Input parameters for this protocol (data)
Parameters (
	ReactionVolume 				Volume
	PartVols 					[]Volume
	PartNames					[]string
	VectorVol 					Volume
	BufferVol 					Volume
	AtpVol 						Volume
	ReVol 						Volume
	LigVol	 					Volume

	ReactionTemp 				Temperature
	ReactionTime 				Time
	InactivationTemp 			Temperature
	InactivationTime 			Time

	OutputReactionName			string
)

// Physical Inputs to this protocol with types
Inputs (
	Parts 				[]*wtype.LHComponent
	Vector 				*wtype.LHComponent
	RestrictionEnzyme 	*wtype.LHComponent
	Buffer 				*wtype.LHComponent
	Water  				*wtype.LHComponent
	Ligase 				*wtype.LHComponent
	Atp 				*wtype.LHComponent
	OutPlate 			*wtype.LHPlate
	InPlate 			*wtype.LHPlate
)


// Physical outputs from this protocol with types
Outputs (
	Reaction *wtype.LHComponent
)

// Data which is returned from this protocol, and data types
Data ()

Requirements {}

// Conditions to run on startup
Setup {}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	samples := make([]*wtype.LHComponent, 0)
	waterSample := mixer.SampleForTotalVolume(Water, ReactionVolume)
	samples = append(samples, waterSample)

	bufferSample := mixer.Sample(Buffer, BufferVol)
	samples = append(samples, bufferSample)

	atpSample := mixer.Sample(Atp, AtpVol)
	samples = append(samples, atpSample)

	//vectorSample := mixer.Sample(Vector, VectorVol)
	vectorSample := mixer.Sample(Vector, VectorVol)
	samples = append(samples, vectorSample)

	for k, part := range Parts {
		fmt.Println("creating dna part num ", k, " comp ", part.CName, " renamed to ", PartNames[k], " vol ", PartVols[k])
		partSample := mixer.Sample(part, PartVols[k])
		partSample.CName = PartNames[k]
		samples = append(samples, partSample)
	}

	reSample := mixer.Sample(RestrictionEnzyme, ReVol)
	samples = append(samples, reSample)

	ligSample := mixer.Sample(Ligase, LigVol)
	samples = append(samples, ligSample)

	out1 := MixInto(OutPlate, "", samples...)

	// incubate the reaction mixture
	out2 := Incubate(out1, ReactionTemp, ReactionTime, false)
	// inactivate
	Reaction = Incubate(out2, InactivationTemp, InactivationTime, false)
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
