protocol AccuracyTest_3

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/wutil"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/microArch/driver/liquidhandling"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/image"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/download"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/doe"
	"fmt"
	"strconv"
	goimage "image"
)


// Input parameters for this protocol (data)
Parameters (
	TotalVolume Volume
	TestSolVolumes []Volume
	NumberofReplicates int
	Printasimage bool
	Imagefilename string
	InputFile	wtype.File
	UseURL bool // select this if getting the image from a URL
	URL string // enter URL link to the image file here if applicable
	NumberofBlanks int
	UseLiquidPolicyForTestSolutions bool
	LHPolicy wtype.PolicyName
	DXORJMP string
	OutputFilename string
	PipetteOnebyOne bool
	UseLHPolicyDoeforDiluent bool
	DilutionFactor float64
	WellsUsed int // optional parameter allowing pipetting to resume on partially filled plate
	MinVolume Volume
)

// Data which is returned from this protocol, and data types
Data (
	Runtowelllocationmap map[string]string //[]string //map[string]string
	Runcount int
	Pixelcount int
	Errors []error
	Blankwells []string
	Runs []doe.Run
	Wellpositionarray []string
	//NeatSamplewells []string 
)


// Physical Inputs to this protocol with types
Inputs (
	TestSols []*wtype.LHComponent
	Diluent *wtype.LHComponent
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Reactions []*wtype.LHComponent
)

Requirements {
}

// Conditions to run on startup
Setup {
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {

	//--------------------------------------------------------------------
	// Global variables declarations
	//--------------------------------------------------------------------

	// image placeholder variables
	var imgFile wtype.File
	var imgBase *goimage.NRGBA


	var minVolume Volume
	// declare some global variables for use later
	var rotate = false
	var autorotate = true
	var wellpositionarray = make([]string, 0)
	Runtowelllocationmap = make(map[string]string)
	Blankwells = make([]string,0)
	counter := WellsUsed

	var platenum = 1
	var runs = make([]doe.Run,1)
	var newruns = make([]doe.Run,0)
	var err error
	Errors = make([]error,0)

	//--------------------------------------------------------------------
	//Fetching image
	//--------------------------------------------------------------------

	//Downloading from URL if requested
	if UseURL {
		imgFile , err = download.File(URL, Imagefilename)
		if err != nil{
			Errorf(err.Error())
		}
		//opening file
		imgBase, err = image.OpenFile(imgFile)
		if err != nil{
			Errorf(err.Error())
		}
	}

	//Opening from File if one is present
	_, err = InputFile.ReadAll()
	if err == nil {
		//opening file
		imgBase, err = image.OpenFile(imgFile)
		if err != nil{
			Errorf(err.Error())
		}
	}else{
		Errorf("no input File Provided")
	}


	//--------------------------------------------------------------------
	//Dilution calculations
	//--------------------------------------------------------------------

	// if dilution factor not set dilute by 10x
	if DilutionFactor == 0 {
		DilutionFactor = 10
	}

	if MinVolume.EqualTo(wunit.NewVolume(0.0,"ul")){
		minVolume = wunit.NewVolume(0.5,"ul")
	}else {
		minVolume = MinVolume
	}

	//--------------------------------------------------------------------
	//Choosing palette
	//--------------------------------------------------------------------

	// work out plate layout based on picture or just in order

	if Printasimage {

	chosencolourpalette := image.AvailablePalettes()["Palette1"]
	positiontocolourmap, _ := image.ImagetoPlatelayout(imgBase, OutPlate, &chosencolourpalette, rotate,autorotate)


	//--------------------------------------------------------------------
	//Pipetting
	//--------------------------------------------------------------------

	//Runtowelllocationmap = make([]string,0)
	
	for location, colour := range positiontocolourmap {
		R,G,B,A := colour.RGBA()
	
		if uint8(R) == 242 && uint8(G) ==243 && uint8(B) == 242 && uint8(A) == 255 {
			continue
			}else {wellpositionarray = append(wellpositionarray,location)
		}
	}
	
	}else{
			
		wellpositionarray = OutPlate.AllWellPositions(wtype.BYCOLUMN)
	
	}
	reactions := make([]*wtype.LHComponent,0)
	
	// use first policy as reference to ensure consistent range through map values
	referencepolicy,found := liquidhandling.GetPolicyByName(LHPolicy)
	if found == false {
		Errorf("policy "+LHPolicy.String()+" not found")
		Errors = append(Errors,fmt.Errorf("policy ",LHPolicy.String()," not found"))
	}
	
	referencekeys := make([]string,0)
	for key,_:= range referencepolicy {
		referencekeys = append(referencekeys,key)
	}
		
	for l := 0; l < len(TestSolVolumes); l++ {
	for k := 0; k< len(TestSols);k++{
	for j:= 0; j< NumberofReplicates;j++{
	for i := 0; i < len(runs); i++ {
		
		var run doe.Run
		
		if counter==((OutPlate.WlsX*OutPlate.WlsY)+NumberofBlanks){
			fmt.Println("plate full, counter = ", counter)
			platenum++
			counter = 0
		}
		
		var eachreaction []*wtype.LHComponent
		var solution *wtype.LHComponent
		
		if PipetteOnebyOne {
		eachreaction = make([]*wtype.LHComponent, 0)
		//eachdilution = make([]*wtype.LHComponent, 0)
		}
		// keep default policy for diluent
		
		// diluent first
		
		// change lhpolicy if desired
		if UseLHPolicyDoeforDiluent {
				Diluent.Type, err = wtype.LiquidTypeFromString(LHPolicy)
				if err != nil {
					Errors = append(Errors,err)
				}
			}
		
		var bufferSample *wtype.LHComponent
		var Dilution *wtype.LHComponent
		
		if TestSolVolumes[l].LessThan(minVolume) {
			
			// add diluent to dilution plate ready for dilution
			dilutedSampleBuffer := mixer.Sample(Diluent, wunit.SubtractVolumes(TotalVolume,[]Volume{wunit.MultiplyVolume(TestSolVolumes[l],DilutionFactor)}))
			Dilution = MixNamed(OutPlate.Type, wellpositionarray[counter],fmt.Sprint("DilutionPlate",platenum),dilutedSampleBuffer)
			
			// add same volume to destination plate ready for dilutedsolution
			bufferSample = mixer.Sample(Diluent, wunit.SubtractVolumes(TotalVolume,[]Volume{wunit.MultiplyVolume(TestSolVolumes[l],DilutionFactor)}))		
			
			
			
		}else{
		
		bufferSample = mixer.Sample(Diluent, wunit.SubtractVolumes(TotalVolume,[]Volume{TestSolVolumes[l]})) //SampleForTotalVolume(Diluent, TotalVolume)
		
		}
		
		if PipetteOnebyOne {
		eachreaction = append(eachreaction,bufferSample)
		}else {
			
			
		solution = MixTo(OutPlate.Type, wellpositionarray[counter],platenum,bufferSample)
		}
		// now test sample
		
		
		// change liquid class
		if UseLiquidPolicyForTestSolutions && LHPolicy != ""{
		TestSols[k].Type,err = wtype.LiquidTypeFromString(LHPolicy)
			if err != nil {
					Errors = append(Errors,err)
				}
		}
		
		if  TestSolVolumes[l].GreaterThan(minVolume) {
		
		//sample
		testSample := mixer.Sample(TestSols[k], TestSolVolumes[l])
		
		if PipetteOnebyOne {
		eachreaction = append(eachreaction,testSample)
		solution = MixTo(OutPlate.Type,wellpositionarray[counter],platenum,eachreaction...)
		} else {
		// pipette out
		solution = Mix(solution,testSample)
		}
		
		
		}else if TestSolVolumes[l].GreaterThan(wunit.NewVolume(0.0,"ul"))  && TestSolVolumes[l].LessThan(minVolume) {

		//sample
		dilutionSample := mixer.Sample(TestSols[k], wunit.MultiplyVolume(TestSolVolumes[l],DilutionFactor))
		Dilution = MixNamed(OutPlate.Type, wellpositionarray[counter],fmt.Sprint("DilutionPlate",platenum),dilutionSample)
		
		testSample := mixer.Sample(Dilution,wunit.MultiplyVolume(TestSolVolumes[l],DilutionFactor))
		
		if PipetteOnebyOne {
		eachreaction = append(eachreaction,testSample)
		solution = MixTo(OutPlate.Type,wellpositionarray[counter],platenum,eachreaction...)
		
		} else {
		// pipette out
	
		solution = Mix(solution,testSample)
		}
		
		
		}
		
		// get annotation info
		doerun :=  wtype.LiquidTypeName(TestSols[k].Type)
		
		
		volume := TestSolVolumes[l].ToString()
		
		solutionname := TestSols[k].CName
		
		// add Solution Name
		run = doe.AddAdditionalHeaderandValue(run,"Additional","Solution", solutionname)
		
		
		// add Volume
		run = doe.AddAdditionalHeaderandValue(run,"Additional","Volume", volume)
		
		// add Replicate
		run = doe.AddAdditionalHeaderandValue(run,"Additional","Replicate", strconv.Itoa(j+1))
		
		// full description
		description := volume+"_"+solutionname+"_replicate"+strconv.Itoa(j+1)+"_platenum"+strconv.Itoa(platenum)
		
		
		// add run to well position lookup table 
		Runtowelllocationmap[doerun.String()+"_"+description]= wellpositionarray[counter]
	
	// add additional info for each run
	fmt.Println("len(runs)", len(runs), "counter", counter, "len(wellpositionarray)", len(wellpositionarray))
	
	run = doe.AddAdditionalHeaderandValue(run,"Additional","PlateNumber", strconv.Itoa(platenum))
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Location", wellpositionarray[counter])
		
	// add setpoint printout to double check correct match up:
	run = doe.AddAdditionalHeaderandValue(run,"Additional","LHPolicy", doerun.String())

	// add plate info:
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Plate Type", OutPlate.Type)
	
	// add plate ZStart:
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Plate WellZStart", OutPlate.WellZStart)
	
	// add plate Height:
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Plate Height", OutPlate.Height)
	
	// other plate offsets:
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Plate WellXOffset", OutPlate.WellXOffset)
	
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Plate WellYOffset", OutPlate.WellYOffset)
	
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Plate WellXStart", OutPlate.WellXStart)
	
	run = doe.AddAdditionalHeaderandValue(run,"Additional","Plate WellYStart", OutPlate.WellYStart)
	
	// add LHPolicy setpoint printout to double check correct match up:
	run = doe.AddAdditionalHeaderandValue(run,"Additional","LHPolicy", doerun.String())
	
	// print out LHPolicy info
	policy, found := liquidhandling.GetPolicyByName(doerun)
	if  !found {
		Errorf("policy "+doerun.String()+" not found")
		Errors = append(Errors,fmt.Errorf("policy ",doerun.String()," not found"))
	}
	
	for _,key := range referencekeys {
		run = doe.AddAdditionalHeaderandValue(run,"Additional","LHPolicy"+"_"+key, policy[key])
	}
	
	reactions = append(reactions,solution)
	newruns = append(newruns,run)
	
	
	counter++
	
	}

	}
	}
	}
	
	// export overall DOE design file showing all well locations for all conditions
	doe.XLSXFileFromRuns(newruns,OutputFilename,DXORJMP)
	
	// add blanks after
	
	for n := 0; n <platenum; n++ {
	for m := 0; m< NumberofBlanks; m++ {
	
		// use defualt policy for blank
		
		bufferSample := mixer.Sample(Diluent, TotalVolume)
		//eachreaction = append(eachreaction,bufferSample)
		
		// add blanks to last column of plate
		well := wutil.NumToAlpha(OutPlate.WlsY-m)+strconv.Itoa(OutPlate.WlsX)
	
		reaction := MixTo(OutPlate.Type,well, n+1,bufferSample)

		Runtowelllocationmap["Blank"+ strconv.Itoa(m+1)+" platenum"+strconv.Itoa(n+1)] = well
		
		Blankwells = append(Blankwells,well)
	
		reactions = append(reactions,reaction)
		counter++
	
	}
	
	}
	
	Reactions = reactions
	Runcount = len(Reactions)
	Pixelcount = len(wellpositionarray)
	Runs = runs
	Wellpositionarray = wellpositionarray
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
