// Generates instructions to make a pallette of all colours in an image
protocol MakePalette

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/image"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"fmt"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/download"
	"image/color"
	"strconv"
)


// Input parameters for this protocol (data)
Parameters (
	VolumeForFullcolour  Volume
	Imagefilename string // name of image file or if using URL use this field to set the desired filename
	UseURL bool // select this if getting the image from a URL
	URL string // enter URL link to the image file here if applicable
	Rotate bool
	AutoRotate bool
	PosterizeImage bool
	PosterizeLevels int
)

// Data which is returned from this protocol, and data types
Data (
	Numberofcolours int
	//Colournames []string
	Palette color.Palette
	ColourtoComponentMap map[string]*wtype.LHComponent
)


// Physical Inputs to this protocol with types
Inputs (
	Cyan *wtype.LHComponent
	Yellow *wtype.LHComponent
	Magenta *wtype.LHComponent
	Black *wtype.LHComponent
	//InPlate *wtype.LHPlate
	OutPlate *wtype.LHPlate
	PalettePlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Colours[]*wtype.LHComponent
)

Requirements {
	
}

// Conditions to run on startup
Setup {
	
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	// if image is from url, download
	if UseURL {
		//downloading image
		imgFile , err := download.File(URL, Imagefilename)
		if err != nil{
			Errorf(err.Error())
		}

		//opening the image file
		img, err := image.OpenFile(imgFile)
		if err != nil{
			Errorf(err.Error())
		}
	}

	if PosterizeImage{
		posterizedImg, err = image.Posterize(img, PosterizeLevels)
		if err != nil{
			Errorf(err.Error())
		}
	}
	 
	// make pallette of colours from image based on CMYK profile 
	chosencolourpalette := image.MakeSmallPalleteFromImage(Imagefilename, OutPlate,Rotate) 
	
	// Resize image to fit microplate, one pixel per well. Produce map to correspond the colour required for each well position. 
	// The nearest matching colour from the colourpalette made above will be used.
	positiontocolourmap, _ := image.ImagetoPlatelayout(Imagefilename, OutPlate, &chosencolourpalette, Rotate, AutoRotate)
	
	// remove duplicate colours so each is only made once
	positiontocolourmap = image.RemoveDuplicatesValuesfromMap(positiontocolourmap)
	
	// make an empty slice of liquid handling components and a map of colour name to liquid handling components
	solutions := make([]*wtype.LHComponent, 0)
	colourtoComponentMap := make(map[string]*wtype.LHComponent)


	// initialise a counter to use for looking up the next well position for each iteration of the loop below
	counter := 0

	platenum := 1
	
	// make a slice of well positions for the plate set in the parameters file
	paletteplatepositions := PalettePlate.AllWellPositions(wtype.BYCOLUMN)



	for _, colour := range positiontocolourmap {
		
		var solution *wtype.LHComponent
		
		colourindex := chosencolourpalette.Index(colour)
		
		if colour != nil {
		//components := make([]*wtype.LHComponent, 0)

		cmyk := image.ColourtoCMYK(colour)
		
		var maxuint8 uint8 = 255		
		
		if cmyk.C ==0 && cmyk.Y == 0 && cmyk.M == 0 && cmyk.K == 0 {
		
		continue
			
			}else{
			
			nextwellpostion := paletteplatepositions[counter]
			
		if counter +1 == len(paletteplatepositions){
		platenum = platenum + 1
		counter = 0
		}else{
		counter = counter + 1	
		}
		if cmyk.C > 0{
			
		cyanvol := wunit.NewVolume(((float64(cmyk.C)/float64(maxuint8)) * VolumeForFullcolour.RawValue()), VolumeForFullcolour.Unit().PrefixedSymbol())
		
		if cyanvol.RawValue() < 0.5 && cyanvol.Unit().PrefixedSymbol() == "ul"{
				cyanvol = wunit.NewVolume(0.5,"ul")
			}
		
		if cmyk.K == 0 && cmyk.M == 0 && cmyk.Y == 0{
		Cyan.Type  =	wtype.LTPostMix
		}else {
		Cyan.Type = wtype.LTDISPENSEABOVE
		}
		
		cyanSample := mixer.Sample(Cyan, cyanvol)
		
		solution = MixTo(PalettePlate.Type, nextwellpostion,platenum,cyanSample)
		//solution = MixTo(PalettePlate.Type, position,1,cyanSample)
		
		//components = append(components, cyanSample)
		}
		
		if cmyk.Y > 0{
		yellowvol := wunit.NewVolume(((float64(cmyk.Y)/float64(maxuint8)) * VolumeForFullcolour.RawValue()), VolumeForFullcolour.Unit().PrefixedSymbol())
		
		if yellowvol.RawValue() < 0.5 && yellowvol.Unit().PrefixedSymbol() == "ul"{
				yellowvol= wunit.NewVolume(0.5,"ul")
			}
		if cmyk.K == 0 && cmyk.M == 0{
		Yellow.Type  =	wtype.LTPostMix
		}else {
		Yellow.Type = wtype.LTDISPENSEABOVE
		}
		
		
		yellowSample := mixer.Sample(Yellow, yellowvol)
		
		if solution != nil {
		solution = Mix(solution, yellowSample)
		}else {
			solution = MixTo(PalettePlate.Type, nextwellpostion, platenum,yellowSample)
			//solution = MixTo(PalettePlate.Type, position,1,yellowSample)
		}
		
		
		//components = append(components, yellowSample)
		}
		
		if cmyk.M > 0{
		magentavol := wunit.NewVolume(((float64(cmyk.M)/float64(maxuint8)) * VolumeForFullcolour.RawValue()), VolumeForFullcolour.Unit().PrefixedSymbol())
		
		if magentavol.RawValue() < 0.5 && magentavol.Unit().PrefixedSymbol() == "ul"{
				magentavol= wunit.NewVolume(0.5,"ul")
			}
		
		if cmyk.K == 0 {
		Magenta.Type  =	wtype.LTPostMix
		}else {
		Magenta.Type = wtype.LTDISPENSEABOVE
		}
		
		magentaSample := mixer.Sample(Magenta, magentavol)
		
		if solution != nil {
		solution = Mix(solution, magentaSample)
		}else {
			solution = MixTo(PalettePlate.Type, nextwellpostion, platenum,magentaSample)
			//solution = MixTo(PalettePlate.Type, position,1,magentaSample)
		}
		
		//components = append(components, magentaSample)
		}
		
		if cmyk.K > 0{
		blackvol := wunit.NewVolume(((float64(cmyk.K)/float64(maxuint8)) * VolumeForFullcolour.RawValue()), VolumeForFullcolour.Unit().PrefixedSymbol())
		
		if blackvol.RawValue() < 0.5 && blackvol.Unit().PrefixedSymbol() == "ul"{
				blackvol= wunit.NewVolume(0.5,"ul")
			}
		
		Black.Type = wtype.LTPostMix
		
		blackSample := mixer.Sample(Black, blackvol)
		
		if solution != nil {
		solution = Mix(solution, blackSample)
		}else {
			solution = MixTo(PalettePlate.Type, nextwellpostion,platenum, blackSample)
			//solution = MixTo(PalettePlate.Type, position,1,blackSample)
		}
		
		//components = append(components, blackSample)
		}
		
		//solution := MixInto(PalettePlate, "", components...)
		solutions = append(solutions, solution)
		colourtoComponentMap[strconv.Itoa(colourindex)] = solution
		
		}
		
		}
	}

	Colours = solutions
	Numberofcolours = len(chosencolourpalette)
	Palette = chosencolourpalette
	ColourtoComponentMap = colourtoComponentMap
	fmt.Println("Unique Colours =",Numberofcolours,"from palette:", chosencolourpalette)

}
// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
	
}

