protocol PCR_ValidateSequences

import (
	"fmt"
	"strings"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/text"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/search"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences"
)



// Input parameters for this protocol (data)
Parameters (
	// PCRprep parameters:
	ReactionName string
	Targetsequence wtype.DNASequence
	FwdPrimerSeq wtype.DNASequence
	RevPrimerSeq wtype.DNASequence
	
	MasterMixVolume Volume
	PrimersalreadyAddedtoMasterMix bool
	PolymeraseAlreadyaddedtoMastermix bool
	FwdPrimerVol Volume
	RevPrimerVol Volume
	Templatevolume Volume
	PolymeraseVolume Volume

	OptionalWellPosition string // Leave blank for Antha to decide
	
	/*
	// let's be ambitious and try this as part of type polymerase Polymeraseconc Volume
	
	//Templatetype string  // e.g. colony, genomic, pure plasmid... will effect efficiency. We could get more sophisticated here later on... 
	//FullTemplatesequence string // better to use Sid's type system here after proof of concept
	//FullTemplatelength int	// clearly could be calculated from the sequence... Sid will have a method to do this already so check!
	//TargetTemplatesequence string // better to use Sid's type system here after proof of concept
	//TargetTemplatelengthinBP int
	*/
	// Reaction parameters: (could be a entered as thermocycle parameters type possibly?)
	Numberofcycles int 
	InitDenaturationtime Time
	Denaturationtime Time
	//Denaturationtemp Temperature
	Annealingtime Time
	AnnealingTemp Temperature // Should be calculated from primer and template binding
	Extensiontime Time // should be calculated from template length and polymerase rate
	Finalextensiontime Time
)

// Data which is returned from this protocol, and data types
Data (
	FwdPrimerSites []search.Thingfound
	RevPrimerSites []search.Thingfound
)


// Physical Inputs to this protocol with types
Inputs (
	FwdPrimer *wtype.LHComponent
	RevPrimer *wtype.LHComponent
	MasterMix *wtype.LHComponent
	PCRPolymerase *wtype.LHComponent
	Template *wtype.LHComponent
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Reaction *wtype.LHComponent
)

Requirements {
	

	
	
}

// Conditions to run on startup
Setup {
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	// rename components

	Template.CName = Targetsequence.Name()
	FwdPrimer.CName = FwdPrimerSeq.Name()
	RevPrimer.CName = RevPrimerSeq.Name()
	
	
	FwdPrimerSites = sequences.FindSeqsinSeqs(Targetsequence.Sequence(), []string{FwdPrimerSeq.Sequence()})
	
	RevPrimerSites = sequences.FindSeqsinSeqs(Targetsequence.Sequence(), []string{RevPrimerSeq.Sequence()})

	
	if len(FwdPrimerSites)==0 || len(RevPrimerSites)==0{
	
	errordescription := fmt.Sprint(
						text.Print("FwdPrimerSitesfound:", fmt.Sprint(FwdPrimerSites)),
						text.Print("RevPrimerSitesfound:", fmt.Sprint(RevPrimerSites)),
	)
	
	Errorf(errordescription)	
	}
	// Make a mastermix

	mmxSample := mixer.Sample(MasterMix, MasterMixVolume)
	
	
	// pipette out to make mastermix
	mastermix := MixInto(OutPlate, OptionalWellPosition, mmxSample)
	
	// rest samples to zero
	samples := make([]*wtype.LHComponent, 0)
	
	// if this is false do stuff inside {}
	
	// add primers
	
	if !PrimersalreadyAddedtoMasterMix {
	FwdPrimerSample := mixer.Sample(FwdPrimer, FwdPrimerVol)
	samples = append(samples, FwdPrimerSample)
	RevPrimerSample := mixer.Sample(RevPrimer, RevPrimerVol)
	samples = append(samples, RevPrimerSample)
	}
	
	
	// add template
	templateSample := mixer.Sample(Template, Templatevolume)
	samples = append(samples, templateSample)

	
	for j := range samples { 
	mastermix = Mix(mastermix, samples[j])
	}
	reaction := mastermix

	// this needs to go after an initial denaturation!
	if !PolymeraseAlreadyaddedtoMastermix {
	polySample := mixer.Sample(PCRPolymerase, PolymeraseVolume)
	
	reaction = Mix(reaction,polySample)
	}

	// thermocycle parameters called from enzyme lookup:

	polymerase := PCRPolymerase.CName


	polymeraseproperties, polymerasefound := enzymes.DNApolymerasetemps[polymerase]
	
	if !polymerasefound {
		validoptions := make([]string,0)
		for polymerasename, _ := range enzymes.DNApolymerasetemps{
			validoptions = append(validoptions,polymerasename)
			}
		
		Errorf("No Properties for", polymerase, "found.", "Valid options are:",strings.Join(validoptions,","))
	}

	extensionTemp := polymeraseproperties["extensiontemp"]
	meltingTemp := polymeraseproperties["meltingtemp"]


	//extensiontime, _ := enzymes.CalculateExtensionTime(polymerase, targetsequence) 

	// initial Denaturation

	r1 := Incubate(reaction, meltingTemp, InitDenaturationtime, false)
	
	for i:=0; i < Numberofcycles; i++ {
		
		// Denature

	r1 = Incubate(r1, meltingTemp, Denaturationtime, false)
	
		// Anneal
	r1 = Incubate(r1, AnnealingTemp, Annealingtime, false)
	
	//extensiontime := TargetTemplatelengthinBP/PCRPolymerase.RateBPpers // we'll get type issues here so leave it out for now
	
		// Extend
	r1 = Incubate(r1, extensionTemp, Extensiontime, false)
		
	}
		// Final Extension
	r1 = Incubate(r1, extensionTemp, Finalextensiontime, false)
	

	// all done
	Reaction = r1
	
	Reaction.CName = ReactionName
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}

/*type Polymerase struct {
	wtype.LHComponent
	Rate_BPpers float64
	Fidelity_errorrate float64 // could dictate how many colonies are checked in validation!
	Extensiontemp Temperature
	Hotstart bool
	StockConcentration Concentration // this is normally in U?
	TargetConcentration Concentration
	// this is also a glycerol solution rather than a watersolution!
}
*/
